CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"C": "integer", "ChannelName": "text", "ColorFormat": "text", "FileLocation": "text", "Frame": "text", "Plate": "text", "Series": "text", "Site": "text", "SizeC": "text", "SizeT": "text", "SizeX": "text", "SizeY": "text", "SizeZ": "text", "T": "text", "Well": "text", "Z": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:OrigNuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:Protein
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Rescale intensity needed to adjust the range of intensity of the image.']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
    Select the input image:OrigNuc
    Name the output image:NewDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:NewDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:3
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    Manual threshold:0.12
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Citoplasma
    Select the method to identify the secondary objects:Propagation
    Select the input image:Protein
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:8|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notes:['Establish a parent-child between the foci (âx80x9cchildrenâx80x9d) and the nuclei (âx80x9cparentsâx80x9d) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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enabled:False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
    Parent objects:Citoplasma
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cito_per_nuc
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
MaskImage:[module_num:9|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:DNA
    Name the output image:Nuc_Masked_DNA
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

RescaleIntensity:[module_num:10|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
    Select the input image:Mito
    Name the output image:RescaleIntensity_mito
    Rescaling method:Stretch each image to use the full intensity range
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
Threshold:[module_num:11|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notes:['Detecting mitochondria (binary)']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
    Select the input image:RescaleIntensity_mito
    Name the output image:Threshold_mito
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Log transform before thresholding?:Yes
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
MaskImage:[module_num:12|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
    Select the input image:Nuc_Masked_DNA
    Name the output image:CitoDNA
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_mito
    Invert the mask?:No

MeasureImageIntensity:[module_num:13|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
    Select images to measure:CitoDNA, DNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Citoplasma
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:14|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
    Select images to measure:CitoDNA, DNA
    Select objects to measure:Citoplasma

ExportToSpreadsheet:[module_num:15|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|STING Project/Granzyme K Project/2023-10-10 AC Cells IF
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DATA_summarizebyImage
    Overwrite existing files without warning?:Yes
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