CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:OrigNuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "pIRF3")
    Name to assign these images:pIRF3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "DAPI") (file doesnot contain "pIRF3")
    Name to assign these images:STING
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:OrigNuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,800
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.012,0.07
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:pIRF3
    Name the output image:Enhanced_pIRF3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:7|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:Enhanced_pIRF3
    Name the output image:Masked_pIRF3
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:Masked_pIRF3
    Name the primary objects to be identified:nuclear_pIRF3_speckles
    Typical diameter of objects, in pixel units (Min,Max):2,35
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
RelateObjects:[module_num:9|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notes:['Establish a parent-child between the foci (âx80x9cchildrenâx80x9d) and the nuclei (âx80x9cparentsâx80x9d) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:nuclear_pIRF3_speckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:pIRF3nuc
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
MeasureObjectIntensity:[module_num:10|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Select images to measure:pIRF3
    Select objects to measure:pIRF3nuc

IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:STING
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Minimum Cross-Entropy

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskImage:[module_num:13|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
    Select the input image:STING
    Name the output image:Masked_STING
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MeasureObjectIntensityDistribution:[module_num:14|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
    Select images to measure:STING
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:3
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    Image:None
    Objects to display:Do not use
    Number of bins:4
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:Yes
    Output image name:Heatmap

ExportToSpreadsheet:[module_num:15|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop/IF Images/Mehdi Abed/pSGEC (ICP703 + cGAMP (20 ug.mL))/3737/Quantification-3737
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:pIRF3nuc|Location_MaxIntensity_Z_pIRF3,pIRF3nuc|Location_MaxIntensity_X_pIRF3,pIRF3nuc|Location_MaxIntensity_Y_pIRF3,pIRF3nuc|Location_CenterMassIntensity_X_pIRF3,pIRF3nuc|Location_CenterMassIntensity_Z_pIRF3,pIRF3nuc|Location_CenterMassIntensity_Y_pIRF3,pIRF3nuc|Location_Center_Z,pIRF3nuc|Location_Center_Y,pIRF3nuc|Location_Center_X,pIRF3nuc|Intensity_StdIntensity_pIRF3,pIRF3nuc|Intensity_StdIntensityEdge_pIRF3,pIRF3nuc|Intensity_MinIntensityEdge_pIRF3,pIRF3nuc|Intensity_UpperQuartileIntensity_pIRF3,pIRF3nuc|Intensity_MaxIntensityEdge_pIRF3,pIRF3nuc|Intensity_MeanIntensity_pIRF3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DATA_summarizebyImage
    Overwrite existing files without warning?:Yes
    Data to export:pIRF3nuc
    Combine these object measurements with those of the previous object?:No
    File name:pIRF3.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
